PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  expName = listen and see
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = 实验结束，感谢您的参与
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  Routine trial1
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    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = 'd','f','j','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.05
      pos = (-0.21, 0)
      startVal [time (s)] = 5.0
      text [set every repeat] = $answer1
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    TextComponent text_12
      letterHeight = 0.05
      pos = (-0.07, 0)
      startVal [time (s)] = 5.0
      text [set every repeat] = $answer2
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    TextComponent text_13
      letterHeight = 0.05
      pos = (0.07, 0)
      startVal [time (s)] = 5.0
      text [set every repeat] = $answer3
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    TextComponent text_14
      letterHeight = 0.05
      pos = (0.21, 0)
      startVal [time (s)] = 5.0
      text [set every repeat] = $answer4
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    SoundComponent sound_1
      sound [set every repeat] = $name
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4
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  Routine enter
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = 现在进入正式实验
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  Routine trial2
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    PolygonComponent polygon_3
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    MovieComponent movie_3
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = name
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 3.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'd','f','j','k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 4.0
      text [set every repeat] = $answer1$answer2$answer3$answer4
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  Routine break_2
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 休息一下，可以按任意键开始最后一轮实验
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exp
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    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        同学们：
        大家好！
        欢迎大家参加测试!

        实验共由2部分组成。在第一部分，你将看到32个视频；
        在第二部分，你将听到32个句子。你需要完成以下两项任务：
        首先，电脑屏幕上会出现一个“+”，提示你开始实验。
        请你集中精力注视屏幕。
        接着，电脑将播放一个英文句子或播放一个视频，
        该句/视频带有一种情绪，请注意听。
        听完一句话后，请在屏幕上出现的D、F、J、K选项中选择您认为该句中体现的情绪，
        键盘按键“D、F、J、K”分别对应屏幕出现的选项。
        选择时右手中指按D键，右手食指按F键，左手按食指按J键、左手中指按K键。
        请按“X”键进入练习阶段。
    KeyboardComponent key_resp
      allowedKeys = "x"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine exe_2
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    TextComponent text_11
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        现在进入的是练习阶段，
        本阶段主要是帮助您熟悉实验流程。
        在接下来的句子中，您可能找不到合适的答案。
        这没关系，按任意键继续。
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine we
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'd','f','j','k',
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_5
      letterHeight = 0.05
      pos = (-0.21, 0)
      startVal [time (s)] = 5.0
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      text [set every repeat]:
        $answer1
    TextComponent text_8
      letterHeight = 0.05
      pos = (-0.07, 0)
      startVal [time (s)] = 5.0
      text [set every repeat] = $answer2
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0.07, 0)
      startVal [time (s)] = 5
      text [set every repeat] = $answer3
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0.21, 0)
      startVal [time (s)] = 5.0
      text [set every repeat] = $answer4
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $name
      size = (0.5, 0.5)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 4
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Flow
  Routine exp
  Routine exe_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = exe.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'answer1': '恐惧', 'answer2': '悲伤', 'answer3': '高兴', 'answer4': '中性', 'correct': 'd', 'name': '02-01-08-02-02-01-04.mp4'},
      {'answer1': '恐惧', 'answer2': '中性', 'answer3': '悲伤', 'answer4': '高兴', 'correct': 'f', 'name': '02-01-08-02-02-01-04.mp4'},
      {'answer1': '中性', 'answer2': '悲伤', 'answer3': '高兴', 'answer4': '恐惧', 'correct': 'j', 'name': '02-01-08-02-02-01-10.mp4'},
      {'answer1': '中性', 'answer2': '高兴', 'answer3': '悲伤', 'answer4': '恐惧', 'correct': 'k', 'name': '02-01-08-02-02-01-10.mp4'},
      {'answer1': '高兴', 'answer2': '恐惧', 'answer3': '中性', 'answer4': '悲伤', 'correct': 'k', 'name': '02-01-08-02-01-01-04.mp4'}]
    Routine we
  LoopTerminator trials
  Routine enter
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trial1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'answer1': '恐惧', 'answer2': '悲伤', 'answer3': '高兴', 'answer4': '中性', 'correct': 'k', 'name': '02-01-01-01-01-01-09.mp4', 'gender': 'male1'},
      {'answer1': '悲伤', 'answer2': '恐惧', 'answer3': '中性', 'answer4': '高兴', 'correct': 'j', 'name': '02-01-01-01-01-01-01.mp4', 'gender': 'male2'},
      {'answer1': '恐惧', 'answer2': '中性', 'answer3': '高兴', 'answer4': '悲伤', 'correct': 'f', 'name': '02-01-01-01-01-01-04.mp4', 'gender': 'female1'},
      {'answer1': '中性', 'answer2': '高兴', 'answer3': '恐惧', 'answer4': '悲伤', 'correct': 'd', 'name': '02-01-01-01-01-01-10.mp4', 'gender': 'female2'},
      {'answer1': '中性', 'answer2': '恐惧', 'answer3': '高兴', 'answer4': '悲伤', 'correct': 'd', 'name': '02-01-01-01-02-01-09.mp4', 'gender': 'male1'},
      {'answer1': '高兴', 'answer2': '中性', 'answer3': '悲伤', 'answer4': '恐惧', 'correct': 'f', 'name': '02-01-01-01-02-01-01.mp4', 'gender': 'male2'},
      {'answer1': '恐惧', 'answer2': '悲伤', 'answer3': '中性', 'answer4': '高兴', 'correct': 'j', 'name': '02-01-01-01-02-01-04.mp4', 'gender': 'female1'},
      {'answer1': '恐惧', 'answer2': '悲伤', 'answer3': '高兴', 'answer4': '中性', 'correct': 'k', 'name': '02-01-01-01-02-01-10.mp4', 'gender': 'female2'},
      {'answer1': '恐惧', 'answer2': '中性', 'answer3': '悲伤', 'answer4': '高兴', 'correct': 'k', 'name': '02-01-03-01-01-01-09.mp4', 'gender': 'male1'},
      {'answer1': '中性', 'answer2': '悲伤', 'answer3': '高兴', 'answer4': '恐惧', 'correct': 'j', 'name': '02-01-03-01-01-01-01.mp4', 'gender': 'male2'}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
    Routine we
  LoopTerminator trials_2
  Routine break_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = trial2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'answer1': '中性', 'answer2': '高兴', 'answer3': '悲伤', 'answer4': '恐惧', 'correct': 'd', 'name': '03-01-01-01-01-01-13.wav', 'gender': 'male1'},
      {'answer1': '悲伤', 'answer2': '中性', 'answer3': '恐惧', 'answer4': '高兴', 'correct': 'f', 'name': '03-01-01-01-02-01-13.wav', 'gender': 'male1'},
      {'answer1': '高兴', 'answer2': '恐惧', 'answer3': '中性', 'answer4': '悲伤', 'correct': 'j', 'name': '03-01-01-01-01-01-01-Kids-neutral-1.wav', 'gender': 'male2'},
      {'answer1': '恐惧', 'answer2': '悲伤', 'answer3': '高兴', 'answer4': '中性', 'correct': 'k', 'name': '03-01-01-01-02-01-01-Dogs-neutral-1.wav', 'gender': 'male2'},
      {'answer1': '高兴', 'answer2': '悲伤', 'answer3': '恐惧', 'answer4': '中性', 'correct': 'k', 'name': '03-01-01-01-01-01-04.wav', 'gender': 'female1'},
      {'answer1': '悲伤', 'answer2': '高兴', 'answer3': '中性', 'answer4': '恐惧', 'correct': 'j', 'name': '03-01-01-01-02-01-04.wav', 'gender': 'female1'},
      {'answer1': '恐惧', 'answer2': '中性', 'answer3': '高兴', 'answer4': '悲伤', 'correct': 'f', 'name': '03-01-01-01-01-01-10.wav', 'gender': 'female2'},
      {'answer1': '中性', 'answer2': '恐惧', 'answer3': '悲伤', 'answer4': '高兴', 'correct': 'd', 'name': '03-01-01-01-02-01-10.wav', 'gender': 'female2'},
      {'answer1': '高兴', 'answer2': '中性', 'answer3': '恐惧', 'answer4': '悲伤', 'correct': 'd', 'name': '03-01-03-01-01-01-13.wav', 'gender': 'male1'},
      {'answer1': '中性', 'answer2': '高兴', 'answer3': '悲伤', 'answer4': '恐惧', 'correct': 'f', 'name': '03-01-03-01-02-01-13.wav', 'gender': 'male1'}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
    Routine trial1
  LoopTerminator trials_3
  Routine end
